hardware:
  simpledatadummy:
    module.Class: simple_data_dummy.SimpleDummy
  mynicard:
    module.Class: national_instruments_x_series.NationalInstrumentsXSeries
    clock_channel: /Dev1/Ctr0
    scanner_clock_channel: /Dev1/Ctr2
    photon_sources:
    - /Dev1/PFI1
    counter_channels:
    - /Dev1/Ctr1
    scanner_counter_channels:
    - /Dev1/Ctr3
    scanner_ao_channels:
    - /Dev1/AO0
    - /Dev1/AO1
    - /Dev1/AO2
    - /Dev1/AO3
    scanner_position_ranges:
    - - -5.293e-05
      - 5.293e-05
    - - -7.982e-05
      - 7.982e-05
    - - -5e-05
      - 5e-05
    - - -10
      - 10
    scanner_voltage_ranges:
    - - -0.2
      - 1.3
    - - 0.2
      - 2.34
    - - -2
      - 8
    - - -10
      - 10
    default_samples_number: 10
    default_clock_frequency: 100
    default_scanner_clock_frequency: 100
    gate_in_channel: /Dev1/PFI3
    counting_edge_rising: true
    odmr_trigger_channel: /Dev1/PFI4
  mw_source_smate:
    module.Class: microwave.mw_source_smate.MicrowaveSmate
    network_address: TCPIP::129.10.128.90::INSTR
    network_timeout: 10
  microwave_dummy:
    module.Class: microwave.mw_source_dummy.MicrowaveDummy
    gpib_address: dummy
    gpib_timeout: 20
  nicard_6343_instreamer:
    module.Class: ni_x_series_in_streamer.NIXSeriesInStreamer
    device_name: Dev1
    digital_sources:
    - PFI1
  pulsestreamer:
    module.Class: swabian_instruments.pulse_streamer.PulseStreamer
    pulsestreamer_ip: 129.10.128.74
    laser_channel: 0
    uw_x_channel: 1
    use_external_clock: false
    external_clock_option: 0
  fastcounter_timetagger:
    module.Class: swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter
    timetagger_channel_apd_0: 3
    timetagger_channel_apd_1: 2
    timetagger_channel_detect: 1
    timetagger_channel_sequence: 2
    timetagger_sum_channels: 4
  fastcounter_ni_gated:
    module.Class: a
  mydummyfastcounter:
    module.Class: fast_counter_dummy.FastCounterDummy
  mydummypulser:
    module.Class: pulser_dummy.PulserDummy
  processdummy:
    module.Class: process_dummy.ProcessDummy
  awg:
    module.Class: awg.siglent_sdg6022x.SDG6022X
    awg_visa_address: TCPIP0::129.10.128.231::INSTR
  laserdummy:
    module.Class: laser.simple_laser_dummy.SimpleLaserDummy
  laserquantum_laser:
    module.Class: laser.laserquantum_laser.LaserQuantumLaser
    interface: ASRL4::INSTR
    maxpower: 0.25
    psu: SMD12
  cameradummy:
    module.Class: camera.camera_dummy.CameraDummy
gui:
  tray:
    module.Class: trayicon.TrayIcon
  man:
    module.Class: manager.managergui.ManagerGui
  confocal:
    module.Class: confocal.confocalgui.ConfocalGui
    connect:
      confocallogic1: scannerlogic
      savelogic: savelogic
      optimizerlogic1: optimizerlogic
    fixed_aspect_ratio_xy: true
    fixed_aspect_ratio_depth: true
    slider_stepsize: 0.001
    image_x_padding: 0.02
    image_y_padding: 0.02
    image_z_padding: 0.02
    default_meter_prefix: u
  pulsedmeasurement:
    module.Class: pulsed_sg.pulsed_sg_maingui.PulsedMeasurementGui
    connect:
      pulsedmasterlogic: pulsedmasterlogic2
  laser:
    module.Class: laser.laser.LaserGUI
    connect:
      laserlogic: laserlogic
  poimanager:
    module.Class: poimanager.poimangui.PoiManagerGui
    connect:
      poimanagerlogic: poimanagerlogic
      scannerlogic: scannerlogic
  timeseries:
    module.Class: time_series.time_series_gui.TimeSeriesGui
    connect:
      _time_series_logic_con: timeserieslogic
  automationgui:
    module.Class: automation.automationgui.AutomationGui
    connect:
      automationlogic: automationlogic
      pulsedmasterlogic: pulsedmasterlogic2
  odmr:
    module.Class: odmr.odmrgui.ODMRGui
    connect:
      odmrlogic1: odmrlogic2
      savelogic: savelogic
  gatedcounter:
    module.Class: gated_counter.gated_counter_gui.GatedCounterGui
    connect:
      gatedcounterlogic1: gatedcounterlogic
      traceanalysislogic1: trace_analysis_logic
  pidcontrol:
    module.Class: pidgui.pidgui.PIDGui
    connect:
      pidlogic: pidlogic
  laserscanner:
    module.Class: laserscanner.laserscannergui.VoltScanGui
    connect:
      voltagescannerlogic1: laserscannerlogic
      savelogic: savelogic
  nv_calculator_gui:
    module.Class: nv_calculator.nv_calculatorgui.NVCalculatorGui
    connect:
      nv_calculatorlogic: nv_calculator_logic
logic:
  timeserieslogic:
    module.Class: time_series_reader_logic.TimeSeriesReaderLogic
    max_frame_rate: 20
    connect:
      _streamer_con: nicard_6343_instreamer
      _savelogic_con: savelogic
  simpledatalogic:
    module.Class: simple_data_logic.SimpleDataLogic
    connect:
      simpledata: simpledatadummy
  kernellogic:
    module.Class: jupyterkernel.kernellogic.QudiKernelLogic
    remoteaccess: true
  pulsedmasterlogic:
    module.Class: pulsed.pulsed_master_logic.PulsedMasterLogic
    connect:
      pulsedmeasurementlogic: pulsedmeasurementlogic
      sequencegeneratorlogic: sequencegeneratorlogic
  pulsedmasterlogic2:
    module.Class: pulsed.pulsed_sg_revision.pulsed_master_logic.PulsedMasterLogic
    connect:
      pulsegenerator: pulsestreamer
      odmrlogic1: odmrlogic2
      fastcounter: fastcounter_timetagger
      savelogic: savelogic
      optimiserlogic: optimizerlogic
  gatedcounterlogic:
    module.Class: gated_counter_logic.GatedCounterLogic
    connect:
      pulsegenerator: pulsestreamer
      odmrlogic1: odmrlogic2
      savelogic: savelogic
      optimiserlogic: optimizerlogic
      counterlogic: counterlogic
      fastcounter: fastcounter_timetagger
  sequencegeneratorlogic:
    module.Class: pulsed.sequence_generator_logic.SequenceGeneratorLogic
    connect:
      pulsegenerator: pulsestreamer
  pulsedmeasurementlogic:
    module.Class: pulsed.pulsed_measurement_logic.PulsedMeasurementLogic
    raw_data_save_type: text
    connect:
      fastcounter: fastcounter_timetagger
      pulsegenerator: pulsestreamer
      fitlogic: fitlogic
      savelogic: savelogic
      microwave: mw_source_smate
  counterlogic:
    module.Class: counter_logic.CounterLogic
    connect:
      counter1: mynicard
      savelogic: savelogic
  scannerlogic:
    module.Class: confocal_logic.ConfocalLogic
    connect:
      confocalscanner1: scanner_tilt_interfuse
      savelogic: savelogic
  scanner_tilt_interfuse:
    module.Class: interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse
    connect:
      confocalscanner1: mynicard
  optimizerlogic:
    module.Class: optimizer_logic.OptimizerLogic
    connect:
      confocalscanner1: scanner_tilt_interfuse
      fitlogic: fitlogic
  poimanagerlogic:
    module.Class: poi_manager_logic.PoiManagerLogic
    connect:
      scannerlogic: scannerlogic
      optimiserlogic: optimizerlogic
      savelogic: savelogic
  odmrlogic:
    module.Class: odmr_logic.ODMRLogic
    connect:
      odmrcounter: mydummyodmrcounter
      fitlogic: fitlogic
      microwave1: microwave_dummy
      savelogic: savelogic
      taskrunner: tasklogic
  odmr_counter_microwave_interfuse:
    module.Class: interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse
    connect:
      slowcounter: mynicard
      microwave: mw_source_smate
  odmr_counter_microwave_pulser_interfuse:
    module.Class: interfuse.odmr_counter_microwave_pulser_interfuse.ODMRCounterMicrowavePulserInterfuse
    connect:
      slowcounter: mynicard
      microwave: mw_source_smate
      pulsegenerator: pulsestreamer
  odmrlogic2:
    module.Class: odmr_logic.ODMRLogic
    connect:
      odmrcounter: odmr_counter_microwave_interfuse
      fitlogic: fitlogic
      microwave1: odmr_counter_microwave_interfuse
      savelogic: savelogic
      taskrunner: tasklogic
      optimiserlogic: optimizerlogic
    scanmode: SWEEP
  laserscannerlogic:
    module.Class: laser_scanner_logic.LaserScannerLogic
    connect:
      confocalscanner1: mynicard
      savelogic: savelogic
  fitlogic:
    module.Class: fit_logic.FitLogic
  tasklogic:
    module.Class: taskrunner.TaskRunner
    tasks:
      scannerLocationRefocus:
        module: refocus
        pausetasks:
        - scan
        - odmr
        needsmodules:
          optimizer: optimizerlogic
  automationlogic:
    module.Class: automation.AutomationLogic
    connect:
      taskrunner: tasklogic
  savelogic:
    module.Class: save_logic.SaveLogic
    win_data_directory: C:\Users\NV Confocal\Documents\Data\Qudi
    log_into_daily_directory: true
    save_pdf: true
    save_png: true
  trace_analysis_logic:
    module.Class: trace_analysis_logic.TraceAnalysisLogic
    connect:
      counterlogic1: gatedcounterlogic
      savelogic: savelogic
      fitlogic: fitlogic
  qdplotlogic:
    module.Class: qdplot_logic.QDPlotLogic
    default_plot_number: 3
    connect:
      save_logic: savelogic
      fit_logic: fitlogic
  nuopslogic:
    module.Class: nuclear_operations_logic.NuclearOperationsLogic
    connect:
      sequencegenerationlogic: sequencegeneratorlogic
      traceanalysislogic: trace_analysis_logic
      gatedcounterlogic: gatedcounterlogic
      odmrlogic: odmrlogic
      optimizerlogic: optimizerlogic
      scannerlogic: scannerlogic
      savelogic: savelogic
  laserlogic:
    module.Class: laser_logic.LaserLogic
    query_interval: 1000
    connect:
      laser: laserquantum_laser
      scanner: mynicard
      scannerlogic: scannerlogic
  camera_logic:
    module.Class: camera_logic.CameraLogic
    connect:
      hardware: cameradummy
      savelogic: savelogic
  nv_calculator_logic:
    module.Class: nv_calculator_logic.NVCalculatorLogic
    connect:
      odmr: odmrlogic
      pulsed: pulsedmeasurementlogic
global:
  startup:
  - man
  - tray
  - tasklogic
  module_server:
    address: localhost
    port: 12345
  stylesheet: qdark.qss
